PsychoPy2experiment version="1.90.3"
Settings
  Monitor = testMonitor
  color = #000000
  colorSpace = hex
  Experiment info = {u'session': u'', u'participant': u'', u'pressed record?': u''}
  Units = use prefs
  Save excel file = True
  Window size (pixels) = [1920, 1080]
  Full-screen window = True
  Use version = 1.90.3
  Save csv file = True
  Data filename = u'data/%s_%s_session%s_%s' % (expInfo['participant'], expName, expInfo['session'], expInfo['date'])
  expName = FanAmbi
  Screen = 1
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Routines
  Routine generate_trials
    CodeComponent code_fp1
      Begin Experiment:
        import numpy as np
        import math
        import psychopy.core
        import random
        import csv
        from itertools import izip
        import random
        import csv




        var = {
        'vel':[5], # start velocity, 5frames per second= 30ms
        'vel_p':[5],


        'resp_0.0': 1,#code for responses

        'resp_11.25': 2,
        'resp_348.75': 2,

        'resp_33.75': 3,
        'resp_326.25': 3,

        'resp_56.25': 4,
        'resp_303.75': 4,

        'resp_78.75': 5,
        'resp_281.25': 5,

        'resp_101.25': 6,
        'resp_258.75': 6,

        'resp_123.75': 7,
        'resp_236.25': 7,

        'resp_146.25': 8,
        'resp_213.75': 8,

        'resp_168.75': 9,
        'resp_191.25': 9}

        #Trialanzahl: 100 pro block

        # Go trials: 90
        # No Go trials: 10
        time2move = 30*[1,2,3]+ 10*[6] #15,5
        direction = 50*['left','right'] # 25
        response_trigger = []
        start_orientation = []
        corrAnsKey = []


        random.shuffle(direction)

        for j,i in zip(direction,time2move):
            if j == 'left':
                corrAnsKey.append('b')
                start_orientation.append('168.75')
                if i == 6:
                    response_trigger.append(0)
                else:
                    response_trigger.append(100)

            if j == 'right':
                corrAnsKey.append('f')
                start_orientation.append('191.25')
                if i == 6:
                    response_trigger.append(0)
                else:
                    response_trigger.append(200)

        # zip lists together
        all = list(zip(time2move,direction,response_trigger,start_orientation,corrAnsKey))
        time2move,direction,response_trigger,start_orientation,corrAnsKey = zip(*all)

        #time2move & direction max repetition: 3 trials

        # randomize with constraints functions
        def valid_duplicate_spacing_p(x):
            for i,elem in izip(xrange(0,len(x)-3),x):
                if (elem[0] == x[i+1][0] and elem[0] == x[i+2][0] and elem[0] == x[i+3][0]) or (elem[1] == x[i+1][1] and elem[1] == x[i+2][1] and elem[1] == x[i+3][1]):
                    return False
            return True

        def sample_permutations_with_duplicate_spacing_p(seq):
            random.shuffle(seq)
            while not valid_duplicate_spacing_p(seq):
                random.shuffle(seq)
            return seq

        #Blöcke und Übungstrials



        for number in range(1,6):
            if number <=4:
                e = all[:]
            else:
                e = all[:10]
            # randomize until no constraints are met
            sample_permutations_with_duplicate_spacing_p(e)

            current_name = 'blocks\\block_p_'+str(number)+'.csv'
            with open(current_name,'wb') as out:
                csv_out=csv.writer(out)
                csv_out.writerow(['time2move','direction','response_trigger','start_orientation','corrAnsKey', 'feedback'])
                for row in e:
                    csv_out.writerow(row)
    CodeComponent feedback
      Begin Routine:
        import pandas as pd
        import os

        # Define the directory where your CSV files are located
        directory = 'blocks'

        # Iterate over each file in the directory
        for filename in os.listdir(directory):
            if filename.startswith("block_p_") and filename.endswith(".csv"):
                # Get the block number from the filename
                block_number = int(filename.split('_')[2].split('.')[0])

                # Set the feedback value based on the block number
                if block_number in [1, 3, 5]:
                    feedback_value = 0
                else:
                    feedback_value = 0.5

                # Read the CSV file
                df = pd.read_csv(os.path.join(directory, filename))

                # Add the 'feedback' column with the appropriate value
                df['feedback'] = feedback_value

                # Save the modified DataFrame back to the CSV file
                df.to_csv(os.path.join(directory, filename), index=False)
    CodeComponent triggers
      Begin Experiment:
        from psychopy import parallel
        parallel.setPortAddress(0x3FF8)


        def eegTriggerSignal(code):

            if code!=-1:
                parallel.setData(int(code))
                core.wait(0.006) # wait betwwen trigger and trigger deletion
                parallel.setData(0)
                logging.data('EEG_Trigger: ' , str(code))
                thisExp.addData('EEG_Trigger', str(code))
            else:
                parallel.setData(int(255))
                core.wait(0.006) # wait betwwen trigger and trigger deletion
                parallel.setData(0)
                logging.data('EEG_Trigger:', ' Fehler in Routine')

        #experiment start S1
        eegTriggerSignal(230)
  Routine ITI_p_practice
    StaticComponent ITI_practice
      stopVal [time (s)] = 1
      startVal [time (s)] = 0.75
  Routine resp_ITI_f
    KeyboardComponent resp
      correctAns = $corrAns
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = 'y','m'
      startVal [time (s)] = 0.0
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  Routine block_feed_f
    TextComponent block_feed_msg
      text [set every repeat] = $msg2
      stopVal [duration (s)] = 2
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent code_f2
      Begin Experiment:
        msg2 = 'no update'
        nErr = 0
      Begin Routine:
        nCorr = trials_f.data['resp_f3.corr'].sum()
        nErr = 30-nCorr
        ERR = int(nErr)


        msg2 = 'Sie hast in diesem Block '+str(ERR)+' Fehler gemacht.'
    ParallelOutComponent p_port_8
      syncScreen = True
      stopData = 0
      stopVal [duration (s)] = 0.1
      address = 0xE010
      startVal [time (s)] = 0.0
      startData = 140
  Routine check
    CodeComponent code_11
      Each Frame:
        if trials_p_practice.thisTrialN > 0 and resp_p3_practice.keys is None :
            trials_p_practice.thisTrialN -= 1
  Routine slow
    CodeComponent code_10
      Begin Routine:
        if resp_p3.keys is None and not time2move == 6:
                continueRoutine = True
                eegTriggerSignal(response_trigger)
        else:
            continueRoutine = False
    ImageComponent image_slow
      startVal [time (s)] = 0.01
      image = img\instr_slow.png
      size = (1.5, 1.5)
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    KeyboardComponent key_resp_5
      forceEndRoutine = True
      allowedKeys = 'space', 'f', 'b'
      startVal [time (s)] = 0.01
      store = nothing
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  Routine trial_f
    TextComponent flanker
      text [set every repeat] = $trial
      stopVal [duration (s)] = 0.1
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    ImageComponent blank_screen
      stopVal [duration (s)] = 1.1
      startVal [time (s)] = 0.1
      image = img\blank.png
      size = (2, 2.3)
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    KeyboardComponent resp_f3
      correctAns = $corrAns
      storeCorrect = True
      stopVal [duration (s)] = 1.1
      forceEndRoutine = True
      allowedKeys = 'y','m'
      startVal [time (s)] = 0.1
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    CodeComponent trigger_code
      End Routine:
        if resp_f3.keys != None:
            if resp_f3.corr == 0:
                eegTriggerSignal(121)
            if resp_f3.corr == 1:
                eegTriggerSignal(120)
    TextComponent foto4
      text = +
      stopVal [duration (s)] = 0.1
      pos = (0.98, -0.94)
      startVal [time (s)] = 0
      letterHeight = 0.2
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    ParallelOutComponent p_port_6
      syncScreen = True
      stopData = 0
      stopVal [duration (s)] = 0.1
      address = 0xE010
      startVal [time (s)] = 0.0
      startData = $flanker_trigger
  Routine ready_p
    ImageComponent instruct_p2
      startVal [time (s)] = 0.0
      image = img\instr_begin.png
      size = (1.5, 1.5)
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    KeyboardComponent resp_p2
      forceEndRoutine = True
      allowedKeys = 'space', 'f', 'b'
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_6
      Begin Routine:
        # end of practice trigger
        eegTriggerSignal(2)

        # clear buffer
        #psychopy.event.clearEvents()
  Routine feedback_p_practice
    ImageComponent fan2_practice
      stopVal [duration (s)] = 0.0
      pos = (0, -150)
      units = pix
      startVal [time (s)] = 0.0
      image = img\Fächer.png
      size = (842, 426)
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    ImageComponent arrow2_practice
      stopVal [duration (s)] = 0.0
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      image = img\arrowOnly.png
      size = (0.055, 1.75)
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    ImageComponent circle2_practice
      stopVal [duration (s)] = 0.0
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      image = img\circle.png
      size = (0.07, 0.12)
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    CodeComponent code_p2_practice
      Begin Routine:
        # set to last known orientation
        arrow2_practice.setOri(var['orinew_p'])
    TextComponent foto2_practice
      text = n
      stopVal [duration (s)] = 0.0
      pos = (0.97, -0.94)
      startVal [time (s)] = 0.0
      font = Wingdings
      letterHeight = 0.2
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  Routine slow_practice
    CodeComponent code_9
      Begin Routine:
        if resp_p3_practice.keys is None and not time2move == 6:
            continueRoutine = True


        else:
            continueRoutine = False
    ImageComponent image_slow_practice
      startVal [time (s)] = 0.01
      image = img\instr_slow.png
      size = (1.5, 1.5)
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    KeyboardComponent key_resp_4
      forceEndRoutine = True
      allowedKeys = 'space', 'f', 'b'
      startVal [time (s)] = 0.01
      store = nothing
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  Routine ready_practice
    KeyboardComponent resp_p2_practice
      forceEndRoutine = True
      allowedKeys = 'space', 'f', 'b'
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent practice_img
      startVal [time (s)] = 0.0
      image = img/instr_2.png
      size = (1.5, 1.5)
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  Routine ready_f
    ImageComponent instruct_f2
      startVal [time (s)] = 0.0
      image = img\flanker_instruct2.png
      size = (1.7, 2)
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    KeyboardComponent resp_f2
      forceEndRoutine = True
      allowedKeys = 'y','m'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trial_p
    CodeComponent code_p1
      Begin Routine:
        if trials_p.thisTrialN == 0:
            eegTriggerSignal(3)
            core.wait(0.5)


        # clear buffer
        psychopy.event.clearEvents()

        # in case key response is given before arrow starts moving
        resp_degree_code = 7
        var['orinew'] = start_orientation

        #stop trial: set arrow and dont take responses
        if time2move == 6:
            eegTriggerSignal(5)
            arrow.setOri(start_orientation)
            fan.draw()
            arrow.draw()
            red_circle.draw()
            foto1.draw()
            win.flip()
            core.wait(1)
            eegTriggerSignal(14)
            continueRoutine = False


        # frameN when arrow starts to move
        ITIframe = int(time2move*41.25)


        # tigger code when arrow starts moving
        ITItrigger = time2move+10


        velocity = var['vel'][-1]
        #with which frame should arrow move
        validframes = list(range(ITIframe,ITIframe+(16*velocity),velocity))


        if direction == 'left':
            alloris1 = [146.25, 123.75, 101.25, 78.75, 56.25, 33.75,11.25, 0.0, 348.75, 326.25, 303.75, 281.25, 258.75, 236.25, 213.75, 191.25]
        else:
            alloris1 = [213.75, 236.25, 258.75, 281.25, 303.75, 326.25, 348.75, 0.0, 11.25, 33.75, 56.25, 78.75, 101.25, 123.75, 146.25, 168.75]
      End Routine:
        # send trigger if key is pressed
        if resp_p3.keys is not None and len(resp_p3.keys)>0:
            if resp_p3.corr == 1:
                trigger_code = eegTriggerSignal(response_trigger+10+resp_degree_code)
            if resp_p3.corr == 0:
                triggercode= eegTriggerSignal(response_trigger+resp_degree_code)


        # add orientation at key press to log
        trials_p.addData("orientation_new", var['orinew'])

        # velocity for this trial
        vel_thisTrial = int(var['vel'][-1])

        # add current velocity to log
        trials_p.addData("velocity", vel_thisTrial)


        #adjust velocity
        #Check letzte  2 Elemente
        adjustFrames={
        '0.0': np.random.choice([0,-1],p=[0.3,0.7]),
        '11.25': np.random.choice([1,0,-1],p=[0.3,0.3,0.4]),
        '348.75': np.random.choice([1,0,-1],p=[0.3,0.3,0.4]),

        '33.75': np.random.choice([1,-1],p=[0.5,0.5]),
        '326.25': np.random.choice([1,-1],p=[0.5,0.5]),

        '56.25': np.random.choice([1,-1],p=[0.5,0.5]),
        '303.75': np.random.choice([1,-1],p=[0.5,0.5]),

        '78.75': np.random.choice([1,-1],p=[0.5,0.5]),
        '281.25': np.random.choice([1,-1],p=[0.5,0.5]),

        '101.25':1,
        '258.75':1,

        '123.75':1,
        '236.25':1,

        '146.25':1,
        '213.75':1,

        '168.75':1,
        '191.25':1}



        if not time2move == 6: # exclude stop trials for this
            adjustVel = adjustFrames[str(var['orinew'])]
            var['vel'].append(vel_thisTrial+adjustVel)


        if var['vel'][-1] >7:
            var['vel'][-1] = 7

        if var['vel'][-1] < 2:
            var['vel'][-1] = 2
      Each Frame:
        # send trigger when arrow starts moving
        if not time2move == 6 and frameN == ITIframe:
            eegTriggerSignal(ITItrigger)



        if frameN in validframes:
            if not time2move == 6:
                arrow.setOri(alloris1[0])
                arrow.draw()
                win.flip()
                var['orinew'] = alloris1[0]
                # change trigger code according to response
                resp_degree_code = var['resp_'+str(var['orinew'])]
                # go to next orientation
                alloris1.pop(0)
            else:
                resp_degree_code = 0


        # send trigger if key is pressed
        #if resp_p3.keys is not None and len(resp_p3.keys)>0:
        #    if resp_p3.corr == 1:
        #        trigger_code = eegTriggerSignal(response_trigger+10+resp_degree_code)
        #    if resp_p3.corr == 0:
        #        triggercode= eegTriggerSignal(response_trigger+resp_degree_code)

        # end routine if there was no key press max42.4ms after the arrow has run through
        if frameN == validframes[-1]+velocity:
            continueRoutine = False
    ImageComponent fan
      pos = (0, -150)
      units = pix
      startVal [time (s)] = 0.0
      image = img\Fächer.png
      size = (842, 426)
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    ImageComponent arrow
      pos = (0, 0.1)
      ori [set every repeat] = $start_orientation
      startVal [time (s)] = 0.0
      image = img\arrowOnly.png
      size = (0.055, 1.75)
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    ImageComponent red_circle
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      image = img\circle.png
      size = (0.07, 0.12)
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    KeyboardComponent resp_p3
      correctAns = $corrAnsKey
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = 'f','b'
      startVal [frame N] = 0
      store = first key
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    TextComponent foto1
      text = n
      stopVal [frame N] = ITIframe
      pos = (0.97, -0.94)
      startVal [time (s)] = 0.0
      font = Wingdings
      letterHeight = 0.2
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    ParallelOutComponent p_port_3
      syncScreen = True
      stopData = 0
      stopVal [duration (s)] = 0.006
      address = 0x3FF8
      startVal [time (s)] = 0.0
      startData = 5
  Routine break_f
    ImageComponent break_f_img
      startVal [time (s)] = 0.0
      image = img\break_image_f.png
      size = (1.7, 2.0)
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    KeyboardComponent resp_f4
      forceEndRoutine = True
      allowedKeys = 'y','m'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine feedback_f
    CodeComponent code_f1
      Begin Experiment:
        msg = ''
      Begin Routine:
        if resp_f3.rt > 1.0 or resp_f3.keys == 0:
            msg = 'Zu langsam!'
            trial_feed = visual.TextStim(win=win, name='trial_feedback',
            text=msg,
            font='Arial',
            pos=(0, 0), height=0.1, wrapWidth=None, ori=0,
            color='white', colorSpace='rgb', opacity=1,
            depth=0.0)
            trial_feed.draw()
            win.flip()
            core.wait(2)
    ParallelOutComponent p_port_7
      syncScreen = True
      stopData = 0
      stopVal [duration (s)] = 0.1
      address = 0xE010
      startVal [time (s)] = 0.0
      startData = 130
  Routine instructions_p
    ImageComponent instruct_p1
      startVal [time (s)] = 0.0
      image = img\instr_1.png
      size = (1.5, 1.5)
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    KeyboardComponent resp_p1
      forceEndRoutine = True
      allowedKeys = 'space', 'f', 'b'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine end_block_tr_p
    CodeComponent code_5
      Begin Routine:
        blocktriggerEnd = 60+nblocks
        eegTriggerSignal(blocktriggerEnd)
  Routine feedback_p
    CodeComponent code_p2
      Begin Routine:
        # set to last known orientation
        arrow2.setOri(var['orinew'])
    ImageComponent fan2
      stopVal [duration (s)] = feedback
      pos = (0, -150)
      units = pix
      startVal [time (s)] = 0.0
      image = img\Fächer.png
      size = (842, 426)
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    ImageComponent arrow2
      stopVal [duration (s)] = feedback
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      image = img\arrowOnly.png
      size = (0.055, 1.75)
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    ImageComponent red_circle2
      stopVal [duration (s)] = feedback
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      image = img\circle.png
      size = (0.07, 0.12)
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    TextComponent foto2
      text = n
      stopVal [duration (s)] = feedback
      pos = (0.97, -0.94)
      startVal [time (s)] = 0.0
      font = Wingdings
      letterHeight = 0.2
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    ParallelOutComponent p_port6
      syncScreen = True
      stopData = 0
      stopVal [duration (s)] = feedback
      address = 0x3FF8
      startVal [time (s)] = 0.0
      startData = 6
  Routine break_p
    CodeComponent code_8
      Begin Routine:
        if nblocks == 4:
            continueRoutine == False
    ImageComponent break_image_p
      startVal [time (s)] = 0.0
      image = img\instr_break.png
      size = (1.5, 1.5)
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    KeyboardComponent resp_p4
      forceEndRoutine = True
      allowedKeys = 'space', 'f', 'b'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instructions_f
    KeyboardComponent resp_f1
      forceEndRoutine = True
      allowedKeys = 'return'
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent instruct_f1
      startVal [time (s)] = 0.0
      image = img\flanker_instruct1.png
      size = (1.7, 2)
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    ParallelOutComponent p_port_4
      syncScreen = True
      stopData = 0
      stopVal [duration (s)] = 0.1
      address = 0xE010
      startVal [time (s)] = 0.0
      startData = 5
  Routine end_block_tr_f
    ParallelOutComponent p_port10
      syncScreen = True
      stopData = 0
      stopVal [duration (s)] = 0.1
      address = 0xE010
      startVal [time (s)] = 0.0
      startData = 93
  Routine End_msg
    ImageComponent end_image
      stopVal [duration (s)] = 3.0
      startVal [time (s)] = 0.0
      image = img\instr_end.png
      size = (1.5, 1.5)
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    CodeComponent code_7
      Begin Routine:
        # end of experiment trigger
        eegTriggerSignal (240)
  Routine b'skip_break_p_2'
    CodeComponent code_4
      Begin Experiment:
        nRepsbreak_1_p = 0
        nRepsready_1_p = 0
      Begin Routine:
        if nblocks <= 3:
            nRepsbreak_1_p = 1
            nRepsready_1_p = 1
        else:
            nRepsbreak_1_p = 0
            nRepsready_1_p = 0
  Routine skip_break_f
    CodeComponent code_f3
      Begin Experiment:
        nRepsbreak_1_f = 0
        nRepsready_1_f = 0
      Begin Routine:
        if nblocks <= 14:
            nRepsbreak_1_f = 1
            nRepsready_1_f = 1
        else:
            nRepsbreak_1_f = 0
            nRepsready_1_f = 0
            eegTriggerSignal(6)
  Routine trial_p_practice
    CodeComponent code_p1_practice
      Begin Routine:
        # clear buffer
        psychopy.event.clearEvents()

        # in case key response is given before arrow starts moving
        resp_degree_code = 9
        var['orinew_p'] = start_orientation


        # frameN when arrow starts to move
        ITIframe = int(time2move*41.25)


        # tigger code when arrow starts moving
        ITItrigger = time2move+10

        #16 Bereiche nach onset
        velocity = var['vel_p'][-1]
        validframes = list(range(ITIframe,ITIframe+(16*velocity),velocity))


        if direction == 'left':
            alloris1 = [146.25, 123.75, 101.25, 78.75, 56.25, 33.75,11.25, 0.0, 348.75, 326.25, 303.75, 281.25, 258.75, 236.25, 213.75, 191.25]
        else:
            alloris1 = [213.75, 236.25, 258.75, 281.25, 303.75, 326.25, 348.75, 0.0, 11.25, 33.75, 56.25, 78.75, 101.25, 123.75, 146.25, 168.75]


        #stop trial: set arrow and dont take responses, wait 1sec
        if time2move == 6:
            eegTriggerSignal(8)
            arrow_practice.setOri(start_orientation)
            fan_practice.draw()
            arrow_practice.draw()
            red_circle_practice.draw()
            foto1_practice.draw()
            win.flip()
            core.wait(1)
            continueRoutine = False
      End Routine:
        # add orientation at key press to log
        trials_p_practice.addData("orientation_new", var['orinew_p'])

        # velocity for this trial
        vel_thisTrial = int(var['vel_p'][-1])

        # add current velocity to log
        trials_p_practice.addData("velocity_p", vel_thisTrial)

        #Check letzte  2 Elemente
        adjustFrames={
        '0.0': np.random.choice([0,-1],p=[0.3,0.7]),
        '11.25': np.random.choice([1,0,-1],p=[0.3,0.3,0.4]),
        '348.75': np.random.choice([1,0,-1],p=[0.3,0.3,0.4]),

        '33.75': np.random.choice([1,-1],p=[0.5,0.5]),
        '326.25': np.random.choice([1,-1],p=[0.5,0.5]),

        '56.25': np.random.choice([1,-1],p=[0.5,0.5]),
        '303.75': np.random.choice([1,-1],p=[0.5,0.5]),

        '78.75': np.random.choice([1,-1],p=[0.5,0.5]),
        '281.25': np.random.choice([1,-1],p=[0.5,0.5]),

        '101.25':1,
        '258.75':1,

        '123.75':1,
        '236.25':1,

        '146.25':1,
        '213.75':1,

        '168.75':1,
        '191.25':1}



        if not time2move == 6: # exclude stop trials for this
            adjustVel = adjustFrames[str(var['orinew_p'])]
            var['vel_p'].append(vel_thisTrial+adjustVel)


        if var['vel_p'][-1] >7:
            var['vel_p'][-1] = 7

        if var['vel_p'][-1] < 2:
            var['vel_p'][-1] = 2

        # send trigger if no key is pressed
        if resp_p3_practice.keys is None :
                triggercode= eegTriggerSignal(response_trigger)
      Each Frame:
        # send trigger when arrow starts moving
        if not time2move == 6 and frameN == ITIframe:
            eegTriggerSignal(ITItrigger)



        if frameN in validframes:
            if not time2move == 6:
                arrow_practice.setOri(alloris1[0])
                arrow_practice.draw()
                win.flip()
                var['orinew_p'] = alloris1[0]
                # change trigger code according to response
                resp_degree_code = var['resp_'+str(var['orinew_p'])]
                # go to next orientation
                alloris1.pop(0)
            else:
                resp_degree_code = 0


        #resp_degree_code schreibt für jeden frame den jeweiligen Wert für die Orientierung auf (1-9, 0 für NoGo trials )

        # send trigger if key is pressed
        #response trigger=0,100,200 for left/right
        #+10 for correct ones
        if resp_p3_practice.keys is not None and len(resp_p3_practice.keys)>0:
            if resp_p3_practice.corr == 1:
                trigger_code = eegTriggerSignal(response_trigger+10+resp_degree_code)
            if resp_p3_practice.corr == 0:
                triggercode= eegTriggerSignal(response_trigger+resp_degree_code)

        # end routine if there was no key press 7 frames after the arrow has run through
        if frameN == validframes[-1]+7:
            continueRoutine = False
    ImageComponent fan_practice
      pos = (0,-150)
      units = pix
      startVal [time (s)] = 0.0
      image = img\Fächer.png
      size = (842, 426)
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    ImageComponent arrow_practice
      pos = (0, 0.1)
      ori [set every repeat] = $start_orientation
      startVal [time (s)] = 0.0
      image = img\arrowOnly.png
      size = (0.055, 1.75)
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    ImageComponent red_circle_practice
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      image = img\circle.png
      size = (0.07, 0.12)
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    KeyboardComponent resp_p3_practice
      correctAns = $corrAnsKey
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = 'f','b'
      startVal [time (s)] = 0.0
      store = first key
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  Routine start_block_tr_f
    ParallelOutComponent p_port_9
      syncScreen = True
      stopData = 0
      stopVal [duration (s)] = 0.1
      address = 0xE010
      startVal [time (s)] = 0.0
      startData = 92
  Routine ITI_p
    StaticComponent iti
      stopVal [time (s)] = 1
      startVal [time (s)] = 0.75
    CodeComponent code_2
      End Routine:
        #beim letzten Durchgang im Block
        if trials_p.thisTrialN == 49:
            eegTriggerSignal(4)
  Routine performance_input
    ImageComponent rating
      startVal [time (s)] = 0.0
      image = img\PP_rating_large.png
      size = (1.7, 2)
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    CodeComponent code
      Begin Routine:
        cursorCounter=0
        cursorVariable='|'
        captured_string=''
        subject_response_finished=False
        trial_clock=core.Clock()
      End Routine:
        var['satisfaction'].append(captured_string)
      Each Frame:
        if cursorCounter >= 30:
            if cursorVariable=='|':
                cursorVariable=' '
            else:
                cursorVariable='|'
            cursorCounter=0
        cursorCounter+=1

        if subject_response_finished:
            final_response=captured_string
            continueRoutine=False
        for key in event.getKeys(['escape','delete','backspace','1','2','3','4','5']):
            if key in ['return']:
                subject_response_finished=True
            elif key in ['escape']:
                core.quit()
            elif key in ['delete','backspace']:
                captured_string = captured_string[:-1]
            else:
                captured_string = captured_string+key
    TextComponent text
      text = Zahl hier eingeben:
      pos = (-0.15, -0.45)
      startVal [time (s)] = 0.0
      letterHeight = 0.065
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    TextComponent text_2
      text [set every frame] = $captured_string+cursorVariable
      pos = (0.05, -0.45)
      startVal [time (s)] = 0.0
      letterHeight = 0.065
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    PolygonComponent line
      pos = (0.055, -0.5)
      shape = line
      startVal [time (s)] = 0.0
      size = (0.06, 0.05)
      fillColor = $[1,1,1]
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    KeyboardComponent key_resp_3
      forceEndRoutine = True
      discard previous = False
      allowedKeys = 'return'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine skip_break_p
    CodeComponent code_p3
      Begin Experiment:
        nRepsbreak_1_p = 0
        nRepsready_1_p = 0
      Begin Routine:
        if nblocks <= 3:
            nRepsbreak_1_p = 1
            nRepsready_1_p = 1
        else:
            nRepsbreak_1_p = 0
            nRepsready_1_p = 0
            eegTriggerSignal(2)
  Routine b'end_block_tr_f_2'
    ParallelOutComponent p_port_10
      syncScreen = True
      stopData = 0
      stopVal [duration (s)] = 0.1
      address = 0xE010
      startVal [time (s)] = 0.0
      startData = 93
  Routine ITI_f
    TextComponent fixation
      text = +
      stopVal [duration (s)] = $ITI
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent foto3
      text = .
      stopVal [duration (s)] = $ITI
      pos = (0.97, -0.87)
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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    ParallelOutComponent p_port_5
      syncScreen = True
      stopData = 0
      stopVal [duration (s)] = 0.1
      address = 0xE010
      startVal [time (s)] = 0.0
      startData = $fix_trigger
  Routine instructions_p2
    ImageComponent image
      startVal [time (s)] = 0.0
      image = img/PP_instruct2_large.png
      size = (1.5, 1.5)
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'y','m'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine pre_trial
    ImageComponent pre_fan
      stopVal [duration (s)] = $time2move
      pos = (0, 0.14)
      startVal [time (s)] = 0.0
      image = fan_new.png
      size = (1.19, 0.75)
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    ImageComponent pre_arrow
      stopVal [duration (s)] = $time2move
      pos = (0, 0.37)
      startVal [time (s)] = 0.0
      image = arrowOnly.png
      size = (0.055, 1.42)
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    ImageComponent circle
      stopVal [duration (s)] = $time2move
      pos = (0, 0.37)
      startVal [time (s)] = 0.0
      image = circleOnly.png
      size = (0.055, 0.055)
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  Routine start_block_tr_p
    CodeComponent code_3
      Begin Routine:
        # send individual block triggers
        blocktrigger = 50+nblocks
        eegTriggerSignal(blocktrigger)
      End Routine:
        '''
        response_triggers = range(101,106)+range(211,216)+range(201,206)+range(211,216)
        # send each trigger once for analysis purposes
        if nblocks ==1:
            for trig in response_triggers:
                eegTriggerSignal(trig)
                core.wait(0.02)
                eegTriggerSignal(10)
                core.wait(0.02)
        '''

        # clear buffer
        psychopy.event.clearEvents()
Flow
  Routine generate_trials
  Routine instructions_p
  Routine ready_practice
  LoopInitiator trials_p_practice loopType="TrialHandler"
    conditionsFile = blocks\block_p_5.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('time2move', 1), ('direction', u'right'), ('response_trigger', 200), ('start_orientation', 191.25), ('corrAnsKey', u'f'), ('feedback', 0)]),
      OrderedDict([('time2move', 1), ('direction', u'right'), ('response_trigger', 200), ('start_orientation', 191.25), ('corrAnsKey', u'f'), ('feedback', 0)]),
      OrderedDict([('time2move', 3), ('direction', u'left'), ('response_trigger', 100), ('start_orientation', 168.75), ('corrAnsKey', u'b'), ('feedback', 0)]),
      OrderedDict([('time2move', 3), ('direction', u'right'), ('response_trigger', 200), ('start_orientation', 191.25), ('corrAnsKey', u'f'), ('feedback', 0)]),
      OrderedDict([('time2move', 2), ('direction', u'left'), ('response_trigger', 100), ('start_orientation', 168.75), ('corrAnsKey', u'b'), ('feedback', 0)]),
      OrderedDict([('time2move', 3), ('direction', u'left'), ('response_trigger', 100), ('start_orientation', 168.75), ('corrAnsKey', u'b'), ('feedback', 0)]),
      OrderedDict([('time2move', 1), ('direction', u'right'), ('response_trigger', 200), ('start_orientation', 191.25), ('corrAnsKey', u'f'), ('feedback', 0)]),
      OrderedDict([('time2move', 2), ('direction', u'left'), ('response_trigger', 100), ('start_orientation', 168.75), ('corrAnsKey', u'b'), ('feedback', 0)]),
      OrderedDict([('time2move', 1), ('direction', u'right'), ('response_trigger', 200), ('start_orientation', 191.25), ('corrAnsKey', u'f'), ('feedback', 0)])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
    Routine trial_p_practice
    Routine slow_practice
    Routine ITI_p_practice
  LoopTerminator trials_p_practice
  Routine ready_p
  LoopInitiator blocks_p loopType="TrialHandler"
    conditionsFile = blocks_p.csv
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('nblocks', 1)]),
      OrderedDict([('nblocks', 2)]),
      OrderedDict([('nblocks', 3)]),
      OrderedDict([('nblocks', 4)])]
    LoopInitiator trials_p loopType="TrialHandler"
      conditionsFile = $"blocks\\block_p_%s.csv" % nblocks
      loopType = random
      nReps = 1
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      Routine trial_p
      Routine feedback_p
      Routine slow
      Routine ITI_p
    LoopTerminator trials_p
    Routine break_p
  LoopTerminator blocks_p
  Routine End_msg
